# The `+` between product patterns on rings the rule cannot part, beside
# linear complexes it can, under RuleMonkey's default strict BNGL `+`.
#
# BioNetGen applies all of a rule's operations, then splits the result into
# connected components. A component holding molecules the rule maps into two
# product patterns breaks the `+`, and BNG2 generates no reaction. These
# channels come from PR #137 (issue #123), which ran them under -no-bscb and
# was closed unmerged; that flag is deprecated and goes in 4.0 (issue #139).
# Here they check the default mode against BNG2's own network.
#
# The rings have four members, so breaking one bond leaves its two ends
# joined the long way round, through the other two molecules.
# product_split's rings are pairs joined by a second bond.
#
# Two channels, no molecule type shared between them. In each, rings that
# the rule cannot part sit beside linear complexes it can, so a change that
# stopped the rule altogether fails as surely as one that let it open rings.
#
#   Split  `L(r!1).R(l!1) -> L(r) + R(l)` on L.R.L.R rings and L.R dimers.
#          BNG2 splits only the dimers.
#   Grab   the same with two reactant patterns and a bond made:
#          `L2(r!1,c).R2(l!1) + C(x) -> L2(r,c!2).C(x!2) + R2(l)`. Only
#          the dimers take a C, so the C pool falls from 2N to N.
#
# The SSA reference is for Grab, whose C pool depletes as it binds; Split is
# first order, where the ODE would serve as well.

begin model
begin parameters
  k_split  1
  k_grab   0.01
  N        100
end parameters

begin molecule types
  L(r,r)
  R(l,l)
  L2(r,r,c)
  R2(l,l)
  C(x)
end molecule types

begin seed species
  L(r!1,r!2).R(l!2,l!3).L(r!3,r!4).R(l!4,l!1)          N
  L(r!1,r).R(l!1,l)                                    N
  L2(r!1,r!2,c).R2(l!2,l!3).L2(r!3,r!4,c).R2(l!4,l!1)  N
  L2(r!1,r,c).R2(l!1,l)                                N
  C(x)                                                 2*N
end seed species

begin observables
  Species   Split_rings  L(r!1,r!2).R(l!2,l!3).L(r!3,r!4).R(l!4,l!1)
  Species   Split_free_L L(r,r)
  Species   Grab_rings   L2(r!1,r!2).R2(l!2,l!3).L2(r!3,r!4).R2(l!4,l!1)
  Molecules Grab_free_C  C(x)
end observables

begin reaction rules
  Split: L(r!1).R(l!1) -> L(r) + R(l)  k_split
  Grab:  L2(r!1,c).R2(l!1) + C(x) -> L2(r,c!2).C(x!2) + R2(l)  k_grab
end reaction rules
end model

begin actions
  writeXML({overwrite=>1})
end actions
